WorkflowBuilder(Version=2.8.1)
GroupWorkflow "Control Logic"(Description="Outputs a boolean signal with specified ON and OFF times.")
    GroupWorkflow CameraFeedback => #0
        BooleanProperty(Value=false)
        -> IgnoreElements => #1
        ExternalizedMapping(Name) => #2
        #1, #2 -> BehaviorSubject CameraTurnedOFF
        #2 -> SubscribeSubject CameraTurnedOFF
        -> WorkflowOutput
    -> Neurophotometrics.V2.DigitalOutput(Command=Clear, Mask=Output0) => #1
    Timer(DueTime=PT0S, Period=PT0.001S)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
    ExternalizedMapping(Value(DisplayName="ON Time (ms)"))
    -> Int64Property(Value=255) => #6
    ExternalizedMapping(Value(DisplayName="OFF Time (ms)"))
    -> Int64Property(Value=299745) => #8
    ExternalizedMapping(Value(DisplayName="LED Offset Time (ms)"))
    -> Int64Property(Value=2000) => #10
    #4, #6, #8, #10 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform => #12
      Script:
        import System

        # Global 'startTime' variable keeps track of time since the current cycle began
        startTime = -1

        @returns(System.Tuple[bool, bool])
        def process(value):
          global startTime
          # local vars for information coming into script.
          # 'value' var is the tuple coming from "combine latest" node
          # access value using .itemN notation
          currentTime = value.Item1
          onTime = value.Item2
          offTime = value.Item3
          ledOffsetTime = value.Item4

          #only called for first element (only time startTime <0 is at init)
          if startTime < 0:
            #set start time of cycle to current time
            startTime = currentTime

            return System.Tuple.Create(True, True)

          #calculate amount of time (ms) in current cycle
          dt = currentTime - startTime

          #account for date change
          if startTime > currentTime:
            dt = dt + (1000.0*3600.0*24.0)

          #if currently in ON, return True
          if dt < onTime:
            return System.Tuple.Create(True, True)
          # else if in OFF state before next cycle's LED Trigger
          elif dt < onTime + offTime - ledOffsetTime:
            return System.Tuple.Create(False, False)
          #else if in OFF state, but LEDs should be ON
          elif dt < onTime + offTime:
            return System.Tuple.Create(False, True)
          #otherwise, full cycle passed update start time
          else:
            startTime = currentTime
            return System.Tuple.Create(True, True)
    -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> Condition => #15
        WorkflowInput Source1
        -> WorkflowOutput
    -> Neurophotometrics.V2.DigitalOutput(Command=Set, Mask=Output0) => #16
    #12 -> MemberSelector(Selector=Item1)
    -> DistinctUntilChanged => #18
    -> Neurophotometrics.V2.AcquisitionControl(Streams=Photometry, Mode=Control) => #19
    #1, #16, #19 -> Merge
    -> WorkflowOutput
    #18 -> PublishSubject StartDataAcqTrig
    #0, #15 -> Merge
-> Neurophotometrics.V2.FP3002 => #1
  AcquisitionMode=StartPhotometry
  PortName=COM10
  Regions
    PhotometryRegion(Index=0, Channel=Red, Rectangle(Location(X=298, Y=548), Size(Width=24, Height=20), X=298, Y=548, Width=24, Height=20), Name=R0)
    PhotometryRegion(Index=1, Channel=Red, Rectangle(Location(X=243, Y=426), Size(Width=28, Height=20), X=243, Y=426, Width=28, Height=20), Name=R1)
    PhotometryRegion(Index=2, Channel=Red, Rectangle(Location(X=317, Y=448), Size(Width=28, Height=26), X=317, Y=448, Width=28, Height=26), Name=R2)
    PhotometryRegion(Index=3, Channel=Red, Rectangle(Location(X=367, Y=511), Size(Width=32, Height=28), X=367, Y=511, Width=32, Height=28), Name=R3)
    PhotometryRegion(Index=4, Channel=Red, Rectangle(Location(X=349, Y=609), Size(Width=30, Height=26), X=349, Y=609, Width=30, Height=26), Name=R4)
    PhotometryRegion(Index=5, Channel=Red, Rectangle(Location(X=282, Y=654), Size(Width=28, Height=24), X=282, Y=654, Width=28, Height=24), Name=R5)
    PhotometryRegion(Index=6, Channel=Red, Rectangle(Location(X=202, Y=647), Size(Width=28, Height=22), X=202, Y=647, Width=28, Height=22), Name=R6)
    PhotometryRegion(Index=7, Channel=Red, Rectangle(Location(X=153, Y=601), Size(Width=22, Height=20), X=153, Y=601, Width=22, Height=20), Name=R7)
    PhotometryRegion(Index=8, Channel=Red, Rectangle(Location(X=174, Y=451), Size(Width=26, Height=24), X=174, Y=451, Width=26, Height=24), Name=R8)
    PhotometryRegion(Index=9, Channel=Red, Rectangle(Location(X=165, Y=530), Size(Width=30, Height=26), X=165, Y=530, Width=30, Height=26), Name=R9)
    PhotometryRegion(Index=10, Channel=Red, Rectangle(Location(X=232, Y=494), Size(Width=30, Height=24), X=232, Y=494, Width=30, Height=24), Name=R10)
    PhotometryRegion(Index=11, Channel=Red, Rectangle(Location(X=219, Y=574), Size(Width=28, Height=26), X=219, Y=574, Width=28, Height=26), Name=R11)
    PhotometryRegion(Index=12, Channel=Green, Rectangle(Location(X=967, Y=506), Size(Width=34, Height=34), X=967, Y=506, Width=34, Height=34), Name=G12)
    PhotometryRegion(Index=13, Channel=Green, Rectangle(Location(X=905, Y=360), Size(Width=36, Height=28), X=905, Y=360, Width=36, Height=28), Name=G13)
    PhotometryRegion(Index=14, Channel=Green, Rectangle(Location(X=991, Y=387), Size(Width=34, Height=30), X=991, Y=387, Width=34, Height=30), Name=G14)
    PhotometryRegion(Index=15, Channel=Green, Rectangle(Location(X=1039, Y=465), Size(Width=30, Height=26), X=1039, Y=465, Width=30, Height=26), Name=G15)
    PhotometryRegion(Index=16, Channel=Green, Rectangle(Location(X=1025, Y=572), Size(Width=32, Height=28), X=1025, Y=572, Width=32, Height=28), Name=G16)
    PhotometryRegion(Index=17, Channel=Green, Rectangle(Location(X=946, Y=616), Size(Width=32, Height=28), X=946, Y=616, Width=32, Height=28), Name=G17)
    PhotometryRegion(Index=18, Channel=Green, Rectangle(Location(X=854, Y=616), Size(Width=30, Height=30), X=854, Y=616, Width=30, Height=30), Name=G18)
    PhotometryRegion(Index=19, Channel=Green, Rectangle(Location(X=793, Y=565), Size(Width=34, Height=28), X=793, Y=565, Width=34, Height=28), Name=G19)
    PhotometryRegion(Index=20, Channel=Green, Rectangle(Location(X=822, Y=384), Size(Width=34, Height=32), X=822, Y=384, Width=34, Height=32), Name=G20)
    PhotometryRegion(Index=21, Channel=Green, Rectangle(Location(X=809, Y=485), Size(Width=32, Height=28), X=809, Y=485, Width=32, Height=28), Name=G21)
    PhotometryRegion(Index=22, Channel=Green, Rectangle(Location(X=897, Y=447), Size(Width=30, Height=30), X=897, Y=447, Width=30, Height=30), Name=G22)
    PhotometryRegion(Index=23, Channel=Green, Rectangle(Location(X=875, Y=535), Size(Width=32, Height=28), X=875, Y=535, Width=32, Height=28), Name=G23)
    PhotometryRegion(Index=24, Channel=Red, Rectangle(Location(X=305, Y=384), Size(Width=24, Height=22), X=305, Y=384, Width=24, Height=22), Name=R24)
    PhotometryRegion(Index=25, Channel=Green, Rectangle(Location(X=976, Y=316), Size(Width=26, Height=26), X=976, Y=316, Width=26, Height=26), Name=G25)
    PhotometryRegion(Index=26, Channel=Red, Rectangle(Location(X=307, Y=490), Size(Width=20, Height=18), X=307, Y=490, Width=20, Height=18), Name=R26)
    PhotometryRegion(Index=27, Channel=Green, Rectangle(Location(X=977, Y=448), Size(Width=22, Height=16), X=977, Y=448, Width=22, Height=16), Name=G27)
-> Neurophotometrics.V2.PhotometryData => #2
  VisualizerSettings
    PlotSettings
      PlotSetting
        PhotometryRegion(Index=0, Channel=Red, Rectangle(Location(X=298, Y=548), Size(Width=24, Height=20), X=298, Y=548, Width=24, Height=20), Name=R0)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=1, Channel=Red, Rectangle(Location(X=246, Y=420), Size(Width=28, Height=20), X=246, Y=420, Width=28, Height=20), Name=R1)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=2, Channel=Red, Rectangle(Location(X=317, Y=448), Size(Width=28, Height=26), X=317, Y=448, Width=28, Height=26), Name=R2)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=3, Channel=Red, Rectangle(Location(X=365, Y=508), Size(Width=32, Height=28), X=365, Y=508, Width=32, Height=28), Name=R3)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=4, Channel=Red, Rectangle(Location(X=347, Y=599), Size(Width=30, Height=26), X=347, Y=599, Width=30, Height=26), Name=R4)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=5, Channel=Red, Rectangle(Location(X=286, Y=644), Size(Width=28, Height=24), X=286, Y=644, Width=28, Height=24), Name=R5)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=6, Channel=Red, Rectangle(Location(X=202, Y=647), Size(Width=28, Height=22), X=202, Y=647, Width=28, Height=22), Name=R6)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=7, Channel=Red, Rectangle(Location(X=153, Y=601), Size(Width=22, Height=20), X=153, Y=601, Width=22, Height=20), Name=R7)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=8, Channel=Red, Rectangle(Location(X=174, Y=444), Size(Width=26, Height=24), X=174, Y=444, Width=26, Height=24), Name=R8)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=9, Channel=Red, Rectangle(Location(X=161, Y=520), Size(Width=30, Height=26), X=161, Y=520, Width=30, Height=26), Name=R9)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=10, Channel=Red, Rectangle(Location(X=232, Y=494), Size(Width=30, Height=24), X=232, Y=494, Width=30, Height=24), Name=R10)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=11, Channel=Red, Rectangle(Location(X=219, Y=574), Size(Width=28, Height=26), X=219, Y=574, Width=28, Height=26), Name=R11)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=12, Channel=Green, Rectangle(Location(X=970, Y=512), Size(Width=34, Height=34), X=970, Y=512, Width=34, Height=34), Name=G12)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=13, Channel=Green, Rectangle(Location(X=910, Y=359), Size(Width=36, Height=28), X=910, Y=359, Width=36, Height=28), Name=G13)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=14, Channel=Green, Rectangle(Location(X=991, Y=387), Size(Width=34, Height=30), X=991, Y=387, Width=34, Height=30), Name=G14)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=15, Channel=Green, Rectangle(Location(X=1046, Y=475), Size(Width=30, Height=26), X=1046, Y=475, Width=30, Height=26), Name=G15)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=16, Channel=Green, Rectangle(Location(X=1028, Y=575), Size(Width=32, Height=28), X=1028, Y=575, Width=32, Height=28), Name=G16)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=17, Channel=Green, Rectangle(Location(X=953, Y=623), Size(Width=32, Height=28), X=953, Y=623, Width=32, Height=28), Name=G17)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=18, Channel=Green, Rectangle(Location(X=861, Y=618), Size(Width=30, Height=30), X=861, Y=618, Width=30, Height=30), Name=G18)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=19, Channel=Green, Rectangle(Location(X=793, Y=565), Size(Width=34, Height=28), X=793, Y=565, Width=34, Height=28), Name=G19)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=20, Channel=Green, Rectangle(Location(X=822, Y=384), Size(Width=34, Height=32), X=822, Y=384, Width=34, Height=32), Name=G20)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=21, Channel=Green, Rectangle(Location(X=809, Y=485), Size(Width=32, Height=28), X=809, Y=485, Width=32, Height=28), Name=G21)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=22, Channel=Green, Rectangle(Location(X=897, Y=447), Size(Width=30, Height=30), X=897, Y=447, Width=30, Height=30), Name=G22)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=23, Channel=Green, Rectangle(Location(X=876, Y=541), Size(Width=32, Height=28), X=876, Y=541, Width=32, Height=28), Name=G23)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=24, Channel=Red, Rectangle(Location(X=305, Y=384), Size(Width=24, Height=22), X=305, Y=384, Width=24, Height=22), Name=R24)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=25, Channel=Green, Rectangle(Location(X=976, Y=316), Size(Width=26, Height=26), X=976, Y=316, Width=26, Height=26), Name=G25)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=26, Channel=Red, Rectangle(Location(X=307, Y=490), Size(Width=20, Height=18), X=307, Y=490, Width=20, Height=18), Name=R26)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=27, Channel=Green, Rectangle(Location(X=977, Y=448), Size(Width=22, Height=16), X=977, Y=448, Width=22, Height=16), Name=G27)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=None, LEDFlag=None, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
    Capacity=1000
-> Neurophotometrics.V2.PhotometryWriter(IncludeRegions=true, IncludePlots=false, IncludeVideo=true, FileName="A:\NPM Data\camomile\20260615\camomile_1ug_50ug_e2p4_.csv", Suffix=Timestamp)
#2 -> Timestamp
-> MemberSelector(Selector=Timestamp.DateTime)
#1 -> Neurophotometrics.V2.DigitalIOs(Input0=true, Input1=false, Output0=false, Output1=false)
-> Bonsai.IO.CsvWriter(FileName="A:\NPM Data\camomile\20260615\camomile_1ug_50ug_e2p4l_ts_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#1 -> Neurophotometrics.V2.Photodiodes
-> Bonsai.IO.CsvWriter(FileName="A:\NPM Data\camomile\20260615\camomile_1ug_50ug_e2p4_pd_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=25032087, ColorProcessing=Default)
-> GroupWorkflow "Camera Logic"
    WorkflowInput Source1
    -> GroupWorkflow "Computer Timestamp"(Description="Timestamps each behavioral camera frame using the computer's clock.") => #1
        WorkflowInput Source1
        -> Timestamp => #1
        -> MemberSelector(Selector=Value) => #2
        #1 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
        #2, #3 -> Zip
        -> WorkflowOutput
    SubscribeSubject StartDataAcqTrig => #2
    ExternalizedMapping(Value(DisplayName="Behavioral Camera ON Time (sec)"))
    -> DoubleProperty(Value=5) => #4
    #2, #4 -> CombineLatest => #5
    #1, #5 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Item2 as CompTime,
        Item2.Item1 as TrigState,
        Item2.Item2 as Duration)
    -> Bonsai.Scripting.IronPython.PythonTransform => #8
      Script:
        prevTrigState = None

        startTime = -1

        @returns(bool)
        def process(value):
          global prevTrigState, startTime

          currentTime = value.CompTime
          currentTrigState = value.TrigState
          duration = value.Duration * 1000.0

          if prevTrigState == None or (not prevTrigState and currentTrigState):
            startTime = currentTime

          prevTrigState = currentTrigState
          dt = currentTime - startTime

          # Account for date change
          if dt < 0:
            dt = dt + (1000.0 * 3600.0 * 24.0)

          return dt < duration
    #1, #8 -> Zip
    -> WorkflowOutput
    #8 -> DistinctUntilChanged
    -> Condition IsCameraTurnedOFF
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> MulticastSubject CameraTurnedOFF
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2)
    -> WorkflowOutput
-> MemberSelector(Selector=Item1) => #13
-> GroupWorkflow "Generate Frame Number"
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        import System
        count = 0

        @returns(System.Tuple[int, float])
        def process(value):
          global count

          count = count + 1
          return System.Tuple.Create(count, value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as FrameCounter,
        Item2 as CompTime)
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=A:\Behavioral_video\camomile\20260615\camomile_1ug_50ug_e2p4_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#13 -> MemberSelector(Selector=Item1.Image)
-> Bonsai.FFmpeg.VideoWriter
  FileName=A:\Behavioral_video\camomile\20260615\camomile_1ug_50ug_e2p4_bcam_.mp4
  Suffix=Timestamp
  Overwrite=false
  FrameRate=20
  OutputArguments="-filter:v hqdn3d=4:4:3:3 -pix_fmt yuv420p10le -c:v libx265 -crf 16"

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=25032085, ColorProcessing=Default)
-> Condition => #19
    WorkflowInput Source1 => #0
    ExternalizedMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="Space Alt", SuppressRepetitions=false)
    -> Bonsai.Scripting.IronPython.PythonTransform => #3
      Script:
        count = 0
        @returns(bool)
        def process(value):
          global count
          count = count + 1
          return count % 2 == 1
    #0, #3 -> CombineLatest
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(bool)
        def process(value):
          return value.Item2
    -> WorkflowOutput
-> GroupWorkflow "Generate Frame Number"
    WorkflowInput Source1
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        count = 0

        @returns(int)
        def process(value):
          global count

          count = count + 1
          return count
    -> Timestamp => #2
    -> MemberSelector(Selector=Value) => #3
    #2 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
    #3, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as FrameCounter,
        Item2 as CompTime)
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter
  FileName=A:\Behavioral_video\camomile\20260615\camomile_1ug_50ug_e2p4_fcam_ts_.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
#19 -> MemberSelector(Selector=Image)
-> Bonsai.FFmpeg.VideoWriter
  FileName=A:\Behavioral_video\camomile\20260615\camomile_1ug_50ug_e2p4_fcam_.mp4
  Suffix=Timestamp
  Overwrite=false
  FrameRate=20
  OutputArguments="-filter:v hqdn3d=4:4:3:3 -pix_fmt yuv420p10le -c:v libx265 -crf 16"
